<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:ports="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:s="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="s:ExpressionTransform">
        <Name>Command</Name>
        <s:Expression>&quot;T&quot;</s:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ports:SerialWriteLine">
          <ports:PortName>ArduinoTrigger</ports:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="s:ExpressionTransform">
        <Name>Sent</Name>
        <s:Expression>&quot;TRIGGER_SENT&quot;</s:Expression>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PortName" DisplayName="PortName" Description="Arduino serial port." />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="BaudRate" DisplayName="BaudRate" Description="Arduino serial baud rate." />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ports:CreateSerialPort">
          <ports:Name>ArduinoTrigger</ports:Name>
          <ports:PortName>COM3</ports:PortName>
          <ports:BaudRate>9600</ports:BaudRate>
          <ports:NewLine>&#xD;&#xA;</ports:NewLine>
          <ports:DtrEnable>true</ports:DtrEnable>
        </Combinator>
      </Expression>
      <Expression xsi:type="s:ExpressionTransform">
        <Name>Opened</Name>
        <s:Expression>&quot;PORT_OPEN&quot;</s:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ports:SerialReadLine">
          <ports:PortName>ArduinoTrigger</ports:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="9" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="3" To="9" Label="Source3" />
      <Edge From="9" To="10" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
